
#
# This file is automatically generated with 
# the System Biology Format Converter (http://sbfc.sourceforge.net/)
# from an SBML file.
#

#
# Model name = Tang2020 - Estimation of transmission risk of COVID-19 and impact of public health interventions - update
#
# isDerivedFrom http://identifiers.org/doid/DOID:0080600
# isDerivedFrom http://identifiers.org/mamo/MAMO_0000046
# isDerivedFrom http://identifiers.org/mamo/MAMO_0000028
# isDerivedFrom http://identifiers.org/taxonomy/2697049
# isDerivedFrom http://identifiers.org/taxonomy/9606
# isDerivedFrom http://identifiers.org/biomodels.db/BIOMD0000000971
# isDescribedBy http://identifiers.org/pubmed/32099934
# is http://identifiers.org/biomodels.db/MODEL2011030001
# is http://identifiers.org/biomodels.db/BIOMD0000000972
#

# some function definitions that are allowed in SBML but not valid in xpp
ceil(x)=flr(1+x)

@delay=50


# FunctionDefinition id = Rate_Law_for_reaction_4, name = Rate Law for reaction_4
Rate_Law_(sigma,rho,E)=(sigma*(1-rho)*E)


# FunctionDefinition id = Rate_Law_for_reaction_3, name = Rate Law for reaction_3
Rate_La_1(sigma,rho,E)=(sigma*rho*E)


# FunctionDefinition id = Rate_Law_for_reaction, name = Rate Law for reaction
Rate_La_2(beta,c,S,I,theta,A,q)=(beta*c*(1-q)*S*(I+theta*A))


# FunctionDefinition id = Rate_Law_for_reaction_1, name = Rate Law for reaction_1
Rate_La_3(c,q,beta,S,I,theta,A)=(c*q*(1-beta)*S*(I+theta*A))


# FunctionDefinition id = Rate_Law_for_reaction_11, name = Rate Law for reaction_11
Rate_La_4(beta,c,q,S,I,theta,A)=(beta*c*q*S*(I+theta*A))


# Compartment: id = Wuhan, name = Wuhan, constant
par Wuhan=1.0

# Parameter:   id =  c, name = c, defined by a Rule

# Parameter:   id =  beta, name = beta, constant
par beta=2.1011E-8

# Parameter:   id =  q, name = q, constant
par q=1.2858E-5

# Parameter:   id =  sigma, name = sigma, constant
par sigma=0.142857

# Parameter:   id =  lambda, name = lambda, constant
par lambda=0.0714285

# Parameter:   id =  rho, name = rho, constant
par rho=0.86834

# Parameter:   id =  delta_I, name = delta_I, defined by a Rule

# Parameter:   id =  delta_q, name = delta_q, constant
par delta_q=0.1259

# Parameter:   id =  gamma_I, name = gamma_I, constant
par gamma_I=0.33029

# Parameter:   id =  gamma_A, name = gamma_A, constant
par gamma_A=0.13978

# Parameter:   id =  gamma_H, name = gamma_H, constant
par gamma_H=0.11624

# Parameter:   id =  alpha, name = alpha, constant
par alpha=1.7826E-5

# Parameter:   id =  theta, name = theta, constant
par theta=1.0

# Parameter:   id =  c_lockdown, name = c_lockdown, constant
par c_lockdow=14.781

# Parameter:   id =  q_lockdown, name = q_lockdown, constant
par q_lockdow=1.2858E-5

# Parameter:   id =  Infected_0, name = Infected, defined by a Rule

# Parameter:   id =  c_0, name = c_0, constant
par c_0=14.781

# Parameter:   id =  c_b, name = c_b, constant
par c_b=2.9253

# Parameter:   id =  r_1, name = r_1, constant
par r_1=1.3768

# Parameter:   id =  r_2, name = r_2, constant
par r_2=0.3283

# Parameter:   id =  delta_I_0, name = delta_I_0, constant
par delta_I_0=0.13266

# Parameter:   id =  delta_I_f, name = delta_I_f, constant
par delta_I_f=2.7367

# assignmentRule: variable = c
c=(c_0-c_b)*exp((-r_1)*t)+c_b
aux c=c

# assignmentRule: variable = delta_I
delta_I=delta_I_f*delta_I_0/((delta_I_f-delta_I_0)*exp((-r_2)*t)+delta_I_0)
aux delta_I=delta_I

# assignmentRule: variable = Infected_0
Infected_=Infected+Asymptoma
aux Infected_=Infected_

# Reaction: id = Susceptible_to_Exposed, name = Susceptible_to_Exposed

Suscept_2=Wuhan*Rate_La_2(beta, c, Susceptib, Infected, theta, Asymptoma, q)

# Reaction: id = Susceptible_to_Susceptible_quarantined, name = Susceptible_to_Susceptible_quarantined

Suscept_3=Wuhan*Rate_La_3(c, q, beta, Susceptib, Infected, theta, Asymptoma)

# Reaction: id = Quarantined_to_Susceptible, name = Quarantined_to_Susceptible

Quarantin=Wuhan*lambda*Suscept_1

# Reaction: id = Exposed_to_Infected, name = Exposed_to_Infected

Exposed_t=Wuhan*Rate_La_1(sigma, rho, Exposed)

# Reaction: id = Exposed_to_Asymptomatic, name = Exposed_to_Asymptomatic

Exposed_1=Wuhan*Rate_Law_(sigma, rho, Exposed)

# Reaction: id = Infected_to_Hospitalised, name = Infected_to_Hospitalised

Infecte_1=Wuhan*delta_I*Infected

# Reaction: id = Infected_to_Recovered, name = Infected_to_Recovered

Infecte_2=Wuhan*gamma_I*Infected

# Reaction: id = Asymptomatic_to_Recovered, name = Asymptomatic_to_Recovered

Asympto_1=Wuhan*gamma_A*Asymptoma

# Reaction: id = Hospitalised_to_Recovered, name = Hospitalised_to_Recovered

Hospita_1=Wuhan*gamma_H*Hospitali

# Reaction: id = Infected_to_Deceased, name = Infected_to_Deceased

Infecte_3=Wuhan*alpha*Infected

# Reaction: id = Hospitalised_to_Deceased, name = Hospitalised_to_Deceased

Hospita_2=Wuhan*alpha*Hospitali

# Reaction: id = Susceptible_to_Exposed_quarantined, name = Susceptible_to_Exposed_quarantined

Suscept_4=Wuhan*Rate_La_4(beta, c, q, Susceptib, Infected, theta, Asymptoma)

# Reaction: id = Exposed_quarantined_to_Hospitalised, name = Exposed_quarantined_to_Hospitalised

Exposed_2=Wuhan*delta_q*Exposed_q

# Species:   id = Susceptible, name = Susceptible, affected by kineticLaw

par Susceptib=1.1081E7
aux Susceptib=Susceptib
dSusceptib/dt=(1/(Wuhan))*((-1.0 * Suscept_2) + (-1.0 * Suscept_3) + ( 1.0 * Quarantin) + (-1.0 * Suscept_4))

# Species:   id = Exposed, name = Exposed, affected by kineticLaw

init Exposed=23382.3126079714
dExposed/dt=(1/(Wuhan))*(( 1.0 * Suscept_2) + (-1.0 * Exposed_t) + (-1.0 * Exposed_1))

# Species:   id = Infected, name = Infected, affected by kineticLaw

init Infected=2200.0
dInfected/dt=(1/(Wuhan))*(( 1.0 * Exposed_t) + (-1.0 * Infecte_1) + (-1.0 * Infecte_2) + (-1.0 * Infecte_3))

# Species:   id = Asymptomatic, name = Asymptomatic, affected by kineticLaw

par Asymptoma=531.176
aux Asymptoma=Asymptoma
dAsymptoma/dt=(1/(Wuhan))*(( 1.0 * Exposed_1) + (-1.0 * Asympto_1))

# Species:   id = Susceptible_quarantined, name = Susceptible_quarantined, affected by kineticLaw

par Suscept_1=163804.0
aux Suscept_1=Suscept_1
dSuscept_1/dt=(1/(Wuhan))*(( 1.0 * Suscept_3) + (-1.0 * Quarantin))

# Species:   id = Exposed_quarantined, name = Exposed_quarantined, affected by kineticLaw

par Exposed_q=0.378022
aux Exposed_q=Exposed_q
dExposed_q/dt=(1/(Wuhan))*(( 1.0 * Suscept_4) + (-1.0 * Exposed_2))

# Species:   id = Hospitalised, name = Hospitalised, affected by kineticLaw

par Hospitali=515.168
aux Hospitali=Hospitali
dHospitali/dt=(1/(Wuhan))*(( 1.0 * Infecte_1) + (-1.0 * Hospita_1) + (-1.0 * Hospita_2) + ( 1.0 * Exposed_2))

# Species:   id = Recovered, name = Recovered, affected by kineticLaw

init Recovered=1898.36
dRecovered/dt=(1/(Wuhan))*(( 1.0 * Infecte_2) + ( 1.0 * Asympto_1) + ( 1.0 * Hospita_1))

@ meth=cvode, tol=1e-6, atol=1e-8
# @ maxstor=1e6
@ bound=40000, total=200
done

